PsychoPy2experiment version="2026.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Saccadic-POV
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Trial
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    TextComponent trial_inprogress
      color [set every repeat] = white
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every repeat] = $"(The POV display is now showing image number "+str(image_number)+", a "+str(forest_letter)+" made of "+str(tree_letter)+"'s.\n\n"
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    TextComponent trial_servostatus
      color [set every repeat] = white
      letterHeight = 0.1
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0
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    KeyboardComponent key_input
      allowedKeys = 'enter','space'
      forceEndRoutine = False
      startVal [time (s)] = 0
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    CodeComponent run_trial_code
      Code Type = Py
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      Begin Routine:
        key_input.clearEvents()
      Each Frame:
        keys = key_input.getKeys()
        if keys:
            print(keys)
        if 'space' in keys:
            if saccade_type == 'servo':
                trial_servostatus.setText('Slewing servo')
            else:
                trial_servostatus.setText('No servo allowed')
        else:
            trial_servostatus.setText('')
        if 'return' in keys:
            continueRoutine = False
    SerialOutComponent serialPort_show
      deviceLabel = pov
      getResponse = True
      saveStartStop = False
      startDataBinary = 1110010
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = s
      startDataType = str
      startVal [time (s)] = 0.0
      stopDataBinary = 1111000
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = o
      stopDataType = str
      syncScreenRefresh = False
  Routine End
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    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = All done.  Thank you!
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    KeyboardComponent key_end
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Setup
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    TextComponent text_instr_1
      letterHeight = 0.03
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome!  A series of images will be presented on the
        light bar in front of you.  You will be asked to identify either the
        SMALL letters that make up the image, or the LARGE letter
        built from the small ones.
    KeyboardComponent key_begin
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent text_example
      font = Courier New
      letterHeight = 0.05
      pos = (0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        L L L L L
            L
            L
            L
            L
    CodeComponent code_example
      Code Type = Py
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      Begin Experiment:
        text_example.setAlignText('left')
    TextComponent text_instr_3
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"In the example above, the LARGE letter is a T, \n and the SMALL letters are L's"
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    TextComponent continue_instr_1
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine Display_Experiment_Type
    RoutineSettingsComponent Display_Experiment_Type
      saveStartStop = False
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    TextComponent text_exp_type
      letterHeight = 0.03
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(saccade_description) +'\n\n\n'+str(forest_trees_description)
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    KeyboardComponent key_exp_type
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent continue_instr_2
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine routine_1
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    CodeComponent rt_fb_code
      Code Type = Py
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      Begin Routine:
        # Provide feedback on the response time of a key response
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"

        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 17 and 18.
        # 2. dedent line 16

        fb_text = 'no key_resp component found - look at the Std out window for info'


        try:
            fb_text = 'RT: ' + str(round(key_resp.rt*1000)/1000) + ' seconds'#multiplying and dividing by 1000 for online compatibility (Math.Round in JS rounds to the nearest integer rather than rounding floats to a decimal place)
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n2. that data is set to store from first or last key')
    TextComponent rt_fb
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine routine
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if key_resp.corr:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine Get_Trial_Response
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    TextComponent text_trial_getresponse
      color [set every repeat] = white
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Type the "+("SMALL" if forest_trees=="trees" else "LARGE")+" letter you saw."
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    KeyboardComponent key_resp_whatletter
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine blank
    RoutineSettingsComponent blank
      saveStartStop = False
      stopVal [duration (s)] = 2
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    SerialOutComponent serialPort_select
      deviceLabel = pov
      getResponse = True
      saveStartStop = False
      startDataBinary = 1110010
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = $"p"+str(image_number)
      startDataType = str
      startVal [time (s)] = 0.0
      stopDataBinary = 1111000
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataType = str
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
Flow
  Routine Setup
  LoopInitiator exp_type loopType="TrialHandler"
    conditionsFile = setup_data/exp_type.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'saccade_type': 'natural', 'forest_trees': 'forest', 'saccade_description': 'Focus on the marker to the left of the light bar.  When the bar lights up, move your eyes to the right marker.  You may repeat this as many times as you like.', 'forest_trees_description': 'Identify the LARGE letter made up of smaller letters.'},
      {'saccade_type': 'servo', 'forest_trees': 'trees', 'saccade_description': 'Look straight ahead.  When the light bar lights up, press the space bar to cause the mirror to move.  You may repeat this as many times as you like.', 'forest_trees_description': 'Identify the SMALL letters that make up the larger one.'}]
    Routine Display_Experiment_Type
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = setup_data/trials.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'image_number': 0, 'forest_letter': 'T', 'tree_letter': 'T'},
        {'image_number': 1, 'forest_letter': 'L', 'tree_letter': 'T'},
        {'image_number': 2, 'forest_letter': 'X', 'tree_letter': 'T'}]
      Routine blank
      Routine Trial
      Routine Get_Trial_Response
    LoopTerminator trials
  LoopTerminator exp_type
  Routine End
